PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent image_3
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = condition_1/fixation.png
      size = (2.5, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine routine_1
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    ImageComponent image_2
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $star
      size = (2.5, 1.5)
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.8
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right','space'
      correctAns = $CorrectAns
      forceEndRoutine = True
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 100
      storeCorrect = True
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  Routine welcome
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = welcome
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  Routine routine
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    TextComponent text_3
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $stimuli
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  Routine routine_2
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    ImageComponent image
      color = 1.0000, 1.0000, 1.0000
      image = condition_1/blank.jpg
      mask = condition_1/blank.png
      size [set every repeat] = (2.5, 1.5)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.5
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  Routine routine_3
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  Routine routine_4
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  Routine routine_5
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  Routine routine_6
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  Routine routine_7
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  Routine routine_8
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  Routine routine_9
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  Routine routine_10
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    ImageComponent image_4
      image [set every repeat] = condition_2/fixation.png
      size = (2.5, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine routine_11
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    TextComponent text
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $stimuli
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  Routine routine_12
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    ImageComponent image_5
      image [set every repeat] = $star
      size = (2.5, 1.5)
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.8
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right','space'
      correctAns = $CorrectAns
      forceEndRoutine = True
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 100
      storeCorrect = True
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  Routine routine_13
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  Routine routine_14
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    ImageComponent image_6
      image [set every repeat] = test/fixation.png
      size = (2.5, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine routine_15
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  Routine routine_16
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    TextComponent text_4
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $stimuli
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  Routine routine_17
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    ImageComponent image_7
      image [set every repeat] = $star
      size = (2.5, 1.5)
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.8
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'left','right','space'
      correctAns = $CorrectAns
      forceEndRoutine = True
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 100
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  Routine routine_18
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        规则和之前练习一样！

        先出现数字，再出现 * 符号
         * 在左边就按左键     * 在右边就按右键
        先出现的数字 <5 或者没有 * 出现就按  ‘空格’
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_19
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第二环节规则

        先出现数字，再出现 * 符号
         * 在左边就按左键     * 在右边就按右键
        先出现的数字 >5 或者没有 * 出现就按  ‘空格’
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introduction
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第一环节规则！

        先出现数字，再出现 * 符号
         * 在左边就按左键     * 在右边就按右键
        先出现的数字 <5 或者没有 * 出现就按  ‘空格’
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_20
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        休息一下，下面进入正式测试啦！

        准备好可以按 空格 继续
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_21
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎美丽帅气的你参与我们的实验

        这个实验会花大概20分钟时间

        总共 2 大环节，每个环节开始前有练习题帮助熟悉流程
        准备好就按  空格  开始吧
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_22
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        劳累的第一个大环节结束啦， 可以休息一下眼睛看看远处吧

        休息好可以按  空格  进入第二个环节的练习题
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_23
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    ImageComponent image_8
      image [set every repeat] = test2/fixation.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine routine_24
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $stimuli
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  Routine routine_25
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    ImageComponent image_9
      image [set every repeat] = $star
      size = (2.5, 1.5)
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.8
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    KeyboardComponent key_resp_10
      allowedKeys [set every repeat] = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 100
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  Routine routine_26
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        休息一下，下面进入正式测试啦！

        准备好可以按 空格 继续
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_27
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        规则和之前练习一样！

        先出现数字，再出现 * 符号
         * 在左边就按左键     * 在右边就按右键
        先出现的数字 >5 或者没有 * 出现就按  ‘空格’
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine routine_21
  Routine introduction
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = test/data4.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuli': 1, 'star': 'test/leftstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 8, 'star': 'test/rightstar.PNG', 'CorrectAns': 'right'},
      {'stimuli': 1, 'star': 'test/blank.PNG', 'CorrectAns': 'space'},
      {'stimuli': 9, 'star': 'test/rightstar.PNG', 'CorrectAns': 'right'},
      {'stimuli': 2, 'star': 'test/leftstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 8, 'star': 'test/leftstar.PNG', 'CorrectAns': 'left'}]
    Routine routine_14
    Routine routine_16
    Routine routine_17
  LoopTerminator trials_3
  Routine routine_20
  Routine routine_18
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition_1/data2.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'stimuli': 1, 'star': 'condition_1/leftstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 2, 'star': 'condition_1/leftstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 8, 'star': 'condition_1/leftstar.PNG', 'CorrectAns': 'left'},
      {'stimuli': 9, 'star': 'condition_1/leftstar.PNG', 'CorrectAns': 'left'},
      {'stimuli': 1, 'star': 'condition_1/rightstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 2, 'star': 'condition_1/rightstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 8, 'star': 'condition_1/rightstar.PNG', 'CorrectAns': 'right'},
      {'stimuli': 9, 'star': 'condition_1/rightstar.PNG', 'CorrectAns': 'right'},
      {'stimuli': 1, 'star': 'condition_1/blank.PNG', 'CorrectAns': 'space'},
      {'stimuli': 2, 'star': 'condition_1/blank.PNG', 'CorrectAns': 'space'},
      {'stimuli': 8, 'star': 'condition_1/blank.PNG', 'CorrectAns': 'space'},
      {'stimuli': 9, 'star': 'condition_1/blank.PNG', 'CorrectAns': 'space'},
      {'stimuli': 1, 'star': 'condition_1/rightstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 2, 'star': 'condition_1/rightstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 8, 'star': 'condition_1/rightstar.PNG', 'CorrectAns': 'right'},
      {'stimuli': 9, 'star': 'condition_1/rightstar.PNG', 'CorrectAns': 'right'},
      {'stimuli': 1, 'star': 'condition_1/leftstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 2, 'star': 'condition_1/leftstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 8, 'star': 'condition_1/leftstar.PNG', 'CorrectAns': 'left'},
      {'stimuli': 9, 'star': 'condition_1/leftstar.PNG', 'CorrectAns': 'left'}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
    Routine trial
    Routine routine
    Routine routine_1
  LoopTerminator trials
  Routine routine_22
  Routine routine_19
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = test2/data3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuli': 1, 'star': 'test2/leftstar.PNG', 'CorrectAns': 'left'},
      {'stimuli': 8, 'star': 'test2/rightstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 1, 'star': 'test2/blank.PNG', 'CorrectAns': 'space'},
      {'stimuli': 9, 'star': 'test2/rightstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 2, 'star': 'test2/leftstar.PNG', 'CorrectAns': 'left'},
      {'stimuli': 8, 'star': 'test2/rightstar.PNG', 'CorrectAns': 'space'}]
    Routine routine_23
    Routine routine_24
    Routine routine_25
  LoopTerminator trials_4
  Routine routine_26
  Routine routine_27
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = condition_2/data.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'stimuli': 1, 'star': 'condition_2/leftstar.PNG', 'CorrectAns': 'left'},
      {'stimuli': 2, 'star': 'condition_2/leftstar.PNG', 'CorrectAns': 'left'},
      {'stimuli': 8, 'star': 'condition_2/leftstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 9, 'star': 'condition_2/leftstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 1, 'star': 'condition_2/rightstar.PNG', 'CorrectAns': 'right'},
      {'stimuli': 2, 'star': 'condition_2/rightstar.PNG', 'CorrectAns': 'left'},
      {'stimuli': 8, 'star': 'condition_2/rightstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 9, 'star': 'condition_2/rightstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 1, 'star': 'condition_2/blank.PNG', 'CorrectAns': 'space'},
      {'stimuli': 2, 'star': 'condition_2/blank.PNG', 'CorrectAns': 'space'},
      {'stimuli': 8, 'star': 'condition_2/blank.PNG', 'CorrectAns': 'space'},
      {'stimuli': 9, 'star': 'condition_2/blank.PNG', 'CorrectAns': 'space'},
      {'stimuli': 1, 'star': 'condition_2/rightstar.PNG', 'CorrectAns': 'right'},
      {'stimuli': 2, 'star': 'condition_2/rightstar.PNG', 'CorrectAns': 'right'},
      {'stimuli': 8, 'star': 'condition_2/rightstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 9, 'star': 'condition_2/rightstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 1, 'star': 'condition_2/leftstar.PNG', 'CorrectAns': 'left'},
      {'stimuli': 2, 'star': 'condition_2/leftstar.PNG', 'CorrectAns': 'left'},
      {'stimuli': 8, 'star': 'condition_2/leftstar.PNG', 'CorrectAns': 'space'},
      {'stimuli': 9, 'star': 'condition_2/leftstar.PNG', 'CorrectAns': 'space'}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
    Routine routine_10
    Routine routine_11
    Routine routine_12
  LoopTerminator trials_2
